<?xml version="1.0" encoding="utf-8"?>
<Script>
  <Context>Zen26</Context>
  <Version>1.0</Version>
  <Language>Python</Language>
  <Text>
import json
import time
import uuid
import sys
from System.IO import Directory, Path, File

# ZEN keeps its Python engine alive between macro runs, so a module imported once stays in
# sys.modules and an edited file in zen_lib goes unnoticed until ZEN itself is restarted.
# Dropping the package here costs milliseconds and makes what runs always be what is on disk,
# which is also what stops a half finished copy of the folder from looking like it worked.
for _cached in [_name for _name in sys.modules if _name == "zen_lib" or _name.startswith("zen_lib.")]:
    del sys.modules[_cached]

from zen_lib.runtime_config import RuntimeConfig, log, read_json as read_json_file
from zen_lib.execute_python import PythonAnalysisRunner
from zen_lib.path_manager_main_macro import PathManager


# The configuration lives in the config folder next to this macro, inside the ZEN
# runtime folder. It is located and read exactly once, here, and then handed down to
# everything that needs a path: the pipeline, the path manager, the Python runner and
# the adaptive experiment functions. Nothing else in this macro builds a path to the
# config folder, and the destination of log() comes from it as well.
CONFIG = RuntimeConfig()


###################### class for API calls ###########################################################
class ZeissApiProcessor:
    """
    Class which collects all of the main API calls to controll the microscope
    """

    @staticmethod
    def read_json(path):
        """
        Kept so that the call sites below do not change, the implementation lives in runtime_config.
        """
        return read_json_file(path)

    @staticmethod
    def get_stage_focus_position():
        """
         Return current stage (X, Y) and focus (Z) positions as [x,y,z] list.
         """
        x = Zen.Devices.Stage.ActualPositionX
        y = Zen.Devices.Stage.ActualPositionY
        z = Zen.Devices.Focus.ActualPosition

        return [x, y, z]

    @staticmethod
    def move(points_to_move):
        """
        Move stage and focus to the given [X, Y, Z] coordinates.
        """
        Zen.Devices.Stage.MoveTo(points_to_move[0], points_to_move[1])
        Zen.Devices.Focus.MoveTo(points_to_move[2])

    @staticmethod
    def load_experiment(chosen_experiment):
        """
         Load and activate an experiment (.czexp file) by name.
         """
        exp = Zen.Acquisition.Experiments.GetByName(chosen_experiment)
        exp.SetActive()
        time.sleep(2)  # Rest for hardware adjustment
        log("Loaded experiment {}".format(chosen_experiment))

    @staticmethod
    def execute_current_experiment():
        """
        Execute the currently active experiment.
        """
        Zen.Acquisition.Execute(Zen.Acquisition.Experiments.ActiveExperiment)
        time.sleep(2)  # Rest for hardware adjustment

    @staticmethod
    def save_experiment_result(name, base_name=None):
        """
        Saves the results of the experiments in the results folder. For the .czi files it utilizes the API call, but for .fcs and .raw files
        it moves them from autosave folder.
        """
        document = Zen.Application.Documents.ActiveDocument

        if document is not None:  # The document is None for the .fcs experiments
            document.Save(name)
        else:
            files = PathManager(CONFIG).get_latest_fcs_and_raws()

            log(str(files))

            for file in files:
                file_name = Path.GetFileNameWithoutExtension(file)
                extenion = Path.GetExtension(file)

                parts = file_name.split("_")

                if len(parts) > 1:

                    final_name = "{}_{}{}".format(base_name, "_".join(parts[1:]), extenion)

                else:

                    final_name = "{}{}".format(base_name, extenion)

                File.Move(file, Path.Combine(name, final_name))


# ==============================================================================
# PIPELINE CLASS
# ==============================================================================

class AcquisitionPipeline:
    """
    A comprehensive pipeline encompassing object detection, motion control toward the detected objects,
    visualization, and post-processing steps involving reanalysis of spatial coordinates (XY and Z)
    and quantitative measurements of the identified objects.

    param RuntimeConfig config: configuration built by the macro. The pipeline never locates
    the config folder itself, it only passes this object on to its helpers.
    param dict adaptive_experiments: experiment name to the function that rewrites it,
    already resolved. It arrives resolved, so that a mistake in it is reported before the
    stage moves rather than in the middle of a run.
    """

    def __init__(self,
                 config,
                 object_visualization_experiment=None,
                 reanalysis_dict=None,
                 post_reanalysis_experiments=None, adaptive_experiments=None):

        self.config = config

        # arguments collecting the experiments names and arguments for Python analysis, which will be used at different
        # stages of the pipeline
        self.object_visualization_experiment = object_visualization_experiment
        self.reanalysis_dict = reanalysis_dict
        self.post_reanalysis_experiments = post_reanalysis_experiments or []
        self.adaptive_experiments = adaptive_experiments or {}

        # Initializing objects for the directories management for reading/saving the results and for initializing python
        # with the arguments. Both receive the already loaded configuration.
        self.path_manager = PathManager(self.config)
        self.python_analysis_runner = PythonAnalysisRunner(self.config)


        self.points_for_overview = self.get_overview_points() # points on which the pipeline will be executed
        self.overview_id = str(uuid.uuid4())
        self.measurements_objects = {}

        # Said out loud, because an adaptive experiment that was never armed is otherwise
        # invisible: it simply does not run, and leaves nothing behind explaining why
        if not self.adaptive_experiments:
            log("Pipeline built with no adaptive experiments")
        else:
            log("Pipeline built with adaptive experiments: {}".format(", ".join(
                ["{} rewriting {}".format(function.__name__, experiment)
                 for experiment, function in sorted(self.adaptive_experiments.items())])))

    def get_overview_points(self):
        """
        Reads the points in which the full pipeline needs to be executed.
        """
        points_path = Path.Combine(self.path_manager.measurements, "points_for_overview.json")

        if File.Exists(points_path):

            points_for_overview = ZeissApiProcessor.read_json(points_path)
        else:

            points_for_overview = None

        return points_for_overview


    def acquire_overview(self, overview_experiment, analysis_args=None, selection_args=None, name=None):

        """
        Method for loading, executing and saving the overview experiment. Activating the analysis of the results and
        reading the JSON with positions of the objects for the measurement from Python analysis.

        param str selection_args: name of a preset in selection_config.json, deciding which of the
        found objects are worth measuring, or None to measure all of them
        """

        log('Initializing overview experiment')

        ZeissApiProcessor.load_experiment(overview_experiment)
        ZeissApiProcessor.execute_current_experiment()

        # The name of the overview image is the combination of pipeline overview id and the name of the point in which
        # the pipeline is executed
        overview_file_name = self.path_manager.overview_image_path(self.overview_id, name)
        overview_analysis_path = self.path_manager.temp_file_path(self.overview_id, None, name)

        ZeissApiProcessor.save_experiment_result(overview_file_name)

        log('Overview experiment finished')

        if analysis_args:
            args_overview = {'type': 'overview', 'file_path': overview_file_name,
                             'saving_path': overview_analysis_path, 'analysis_arguments': analysis_args,
                             'selection_arguments': selection_args, 'is_FCS': False}

            log("Initializing the overview image analysis: {}".format(args_overview))
            self.python_analysis_runner.run(**args_overview)

            # Loading JSON with the objects positions, crucial for the capture_objects method
            self.measurements_objects = self.load_measurements(self.overview_id, name=name)

        log("Overview finished")

    def load_measurements(self, obj_id, reanalysis_type=None, name=None):
        """
        Loads JSON files for the reanalysis of the objects positions.
        """
        points_path = self.path_manager.temp_file_path(obj_id, reanalysis_type, name)

        data = ZeissApiProcessor.read_json(points_path)
        log("Loaded measurement data for object {} [{}] from {}".format(
            obj_id, reanalysis_type or "overview", points_path))

        return data

    def capture_objects(self, object_ids=None, name=None):
        """
        Method for performing objects visualizationexperiment, calling functions for reanalysis of xy and z position and
        executing all the post reanalysis experiments on all of founded objects in the pipeline
        :param object_ids: uuids of the founded objects in the current pipeline position
        :param name: Name of the position in which the pipeline will be executed
        :return: None
        """

        if not self.measurements_objects:
            log("No overview results for {}".format(self.overview_id))
            return

        if object_ids is None:
            # The analysis side marks every object it found with 'selected'. Rejected ones stay in the
            # JSON together with whatever was measured on them, they are simply not driven to.
            object_ids = [obj_id for obj_id, obj in self.measurements_objects.items() if obj['selected']]

            skipped = len(self.measurements_objects) - len(object_ids)

            if skipped:
                log("Object selection rejected {} of {} objects".format(skipped, len(self.measurements_objects)))

        log("Initialized capturing objects")

        for obj_id in object_ids:
            obj = self.measurements_objects[obj_id]
            ZeissApiProcessor.move(obj["position"])

            # --- 1️ Do object visualization experiment, which results are used for xy-reanalysis ---
            self._run_experiment(obj_id, self.object_visualization_experiment, stage='_exp', name=name, obj=obj)

            log('Finished visualization of object {}'.format(obj_id))

            # --- 2 Reanalysis ---
            if self.reanalysis_dict is not None:
                log("Initialized reanalysis of object: {}".format(obj_id))

                # Reanalysis XY
                if self.reanalysis_dict.get('xy'):
                    self._perform_reanalysis_xy(obj_id, name)

                # Reanalysis Z. Both halves are required: without an experiment there is nothing to
                # acquire and load_experiment would be handed None, without an analysis there is
                # nothing to read the corrected position from.
                z_data = self.reanalysis_dict.get('z')

                if z_data and z_data.get('z_experiment') is not None and z_data.get('z_analysis') is not None:
                    self._perform_reanalysis_z(obj_id, name, obj)

                elif z_data and (z_data.get('z_experiment') is not None or z_data.get('z_analysis') is not None):
                    log("Skipping Z reanalysis for object {}: it needs both an experiment and an "
                        "analysis, got experiment={} and analysis={}".format(
                            obj_id, z_data.get('z_experiment'), z_data.get('z_analysis')))

            for exp_name in self.post_reanalysis_experiments:
                log('Running experiment {} on object {}'.format(exp_name, obj_id, obj=obj))

                self._run_experiment(obj_id, exp_name, stage="_post", name=name, obj=obj)

            log("Finished capturing object {}".format(obj_id))
            # Clearing the experiments from the view for resources saving
            Zen.Application.Documents.RemoveAll()

    def _perform_reanalysis_xy(self, obj_id, name=None, obj=None):
        """
        Function responsible for initializing Python xy reanalysis on object from object_visualization experiment result and
        reading the new-corrected positions of object.
        """
        log('Initialized reanalysis of object {}'.format(obj_id))

        file_name = self.path_manager.result_path(obj_id, '_exp', self.object_visualization_experiment, name)
        saving_path = self.path_manager.temp_file_path(obj_id, 'xy', name)

        # The type has to be reanalysis_xy, not overview: it is what makes the analysis
        # side reduce several detections to the one nearest the current stage position,
        # instead of returning them all and letting the line below pick an arbitrary one.
        args_xy = {'type': 'reanalysis_xy', 'file_path': file_name,
                   'saving_path': saving_path, 'analysis_arguments': self.reanalysis_dict['xy'], 'is_FCS': False}

        log("Running XY reanalysis script with args: {}".format(args_xy))
        self.python_analysis_runner.run(**args_xy)

        new_data = self.load_measurements(obj_id, reanalysis_type="xy", name=name)

        if not new_data:
            log("Warning: No XY reanalysis points found for object {}".format(obj_id))
            return

        new_position = new_data[list(new_data.keys())[0]]['position']

        ZeissApiProcessor.move(new_position)
        log("Moved stage to XY reanalysis position for object {}".format(obj_id))

    def _perform_reanalysis_z(self, obj_id, name=None, obj=None):
        """
        Function responsible for executing the z-reanalysis experiments, initializing the Python analysis and reading
        the JSON with new positions
        """

        z_cfg = self.reanalysis_dict['z']

        z_exp = z_cfg['z_experiment']
        z_analysis = z_cfg['z_analysis']

        self._run_experiment(obj_id, z_exp, stage="_reanalysis_z", name=name, obj=obj)

        file_name = self.path_manager.result_path(obj_id, "_reanalysis_z", z_exp, name)
        saving_path = self.path_manager.temp_file_path(obj_id, 'z', name)

        args_z = {'type': 'reanalysis_z', 'file_path': file_name, 'saving_path': saving_path,
                  'analysis_arguments': z_analysis, 'is_FCS': z_cfg['is_FCS']}

        log("Running Z reanalysis script with args: {}".format(args_z))
        self.python_analysis_runner.run(**args_z)

        z_data = self.load_measurements(obj_id, reanalysis_type="z", name=name)

        new_positions = z_data[list(z_data.keys())[0]]['position']

        ZeissApiProcessor.move(new_positions)

        log("Moved stage to Z reanalysis position for object {}".format(obj_id))

        log("Finished reanalysis for object {}".format(obj_id))

    def _run_experiment(self, obj_id, exp_item, stage, name=None, obj=None):
        """
        Function responsible for loading, executing experiments and saving the results in correct directory with
        proper name. If an adaptive function is paired with this experiment it runs first and rewrites
        it, using the properties of the object the experiment is about to be run on.
        """

        adaptive = self.adaptive_experiments.get(exp_item)

        if adaptive is not None:
            log('Doing adaptive experiment {} on {}'.format(adaptive.__name__, exp_item))

            adaptive(exp_item, obj_id, stage, obj, name)

            log('Rewrote experiment {} with {}'.format(exp_item, adaptive.__name__))

        ZeissApiProcessor.load_experiment(exp_item)
        ZeissApiProcessor.execute_current_experiment()

        # Different approaches for saving for .fcs files (which gives None) and .czi files
        if Zen.Application.Documents.ActiveDocument is None:

            file_name = self.path_manager.result_dir(obj_id, stage, name)
            base_name = Path.GetFileNameWithoutExtension(self.path_manager.result_path(obj_id, stage, exp_item, name))

        else:
            file_name = self.path_manager.result_path(obj_id, stage, exp_item, name)
            base_name = None

        ZeissApiProcessor.save_experiment_result(file_name, base_name)

        log("Saved the result: {}".format(file_name))


################################## Loading the adaptive experiments ##########################################
# An adaptive experiment is a function that rewrites an experiment just before it runs, using the
# properties of the object it is about to be run on. Those functions live in their own folder next
# to this macro, one file each, and are NOT imported: a normally imported module cannot see Zen,
# ZeissApiProcessor or any of the other names ZEN injects into a macro. Each file is instead read
# and run in a namespace that already holds them, which is the same thing as pasting its text in
# here, only done by the code instead of by hand.


# Adaptive experiments are read from their files and run here, at the top level of this macro.
#
# The experiment editing members - ClearExperimentRegionsAndPositions, AddSinglePosition and
# about twenty more - are .NET EXTENSION METHODS on ZenExperiment, declared in
# Zeiss.Micro.LM.Scripting. IronPython only surfaces extension methods in a compilation unit
# that imported their namespace, and ZEN does that when it compiles this macro. A plugin is
# compiled separately, gets its own module context, and therefore sees 71 members instead of
# 96 - the same object, the same type, the same globals, and no way to tell from the outside.
#
# The three lines below are prepended to every plugin so that its own compilation unit imports
# them too. This is what makes an adaptive experiment work from a .py file at all. Measured on
# the instrument: without it a probe saw 71 members, with it 95.
PLUGIN_PREAMBLE = "import clr; import Zeiss.Micro.LM.Scripting; clr.ImportExtensions(Zeiss.Micro.LM.Scripting)\n"

ADAPTIVE_FUNCTIONS = {}


def register_adaptive(function):
    """
    Collects an adaptive experiment. It is the counterpart of @register_class on the analysis
    side: the name of the decorated function is what the dropdown offers.
    :param function: the decorated function
    :return: the same function, unchanged
    """
    ADAPTIVE_FUNCTIONS[function.__name__] = function

    return function


if not Directory.Exists(CONFIG.adaptive_path):
    log("No adaptive experiments: {} does not exist".format(CONFIG.adaptive_path))

else:
    for _plugin_path in Directory.GetFiles(CONFIG.adaptive_path, "*.py"):

        # Files whose name starts with an underscore are helpers, not experiments
        if Path.GetFileName(_plugin_path).startswith("_"):
            continue

        try:
            with open(_plugin_path, "r") as _plugin_file:
                _plugin_source = _plugin_file.read()

            # The preamble is one line, so a line number in a plugin traceback is one higher
            # than the same line in the file itself
            exec(PLUGIN_PREAMBLE + _plugin_source)

        except Exception as _error:
            log("Adaptive experiment {} could not be loaded: {}".format(_plugin_path, _error))

    log("Loaded adaptive experiments: {}".format(", ".join(sorted(ADAPTIVE_FUNCTIONS)) or "none"))


################################## Reading and checking the GUI selections #######################################
# Everything the user can get wrong is caught here, before the pipeline is built and before
# anything moves. A run started from this macro is unattended, so a bad combination of
# settings that only surfaces halfway through costs an experiment and a plate position.


def none_or_value(x):
    return None if x == "None" else x


def build_adaptive_experiments(pairs):
    """
    Resolves the pairs the GUI collected into the mapping the pipeline uses: experiment name to
    the function that rewrites it. Keyed by the experiment, because two functions rewriting the
    same experiment would fight over it and the second would quietly win.
    :param list pairs: list of [function name, experiment name] pairs, possibly empty
    :return: tuple (dict of experiment name to function, error message or None)
    """
    adaptive_experiments = {}

    for pair in pairs:
        function_name, target_experiment = pair[0], pair[1]

        function = ADAPTIVE_FUNCTIONS.get(function_name)

        if function is None:
            return {}, "The adaptive function '{}' was not loaded from {}. Available: {}".format(
                function_name, CONFIG.adaptive_path, ", ".join(sorted(ADAPTIVE_FUNCTIONS)) or "none")

        if target_experiment is None:
            return {}, "The adaptive function '{}' has no experiment to rewrite.".format(function_name)

        if target_experiment in adaptive_experiments:
            return {}, "The experiment '{}' is paired with two adaptive functions, '{}' and " \
                       "'{}'. Only one function can rewrite an experiment.".format(
                           target_experiment,
                           adaptive_experiments[target_experiment].__name__, function_name)

        adaptive_experiments[target_experiment] = function

    return adaptive_experiments, None


def validate_setup(setup):
    """
    Collects everything that is wrong with the chosen combination of settings.
    :param dict setup: the selections read from the GUI
    :return: list of messages, empty when the setup can be run
    """
    problems = []

    z_experiment = setup['z_experiment']
    z_analysis = setup['z_analysis']

    if (z_experiment is None) != (z_analysis is None):
        problems.append(
            "Z reanalysis needs both an experiment and an analysis, or neither of them. The chosen "
            "experiment is {} and the chosen analysis is {}.".format(z_experiment, z_analysis))

    # Without object finding the macro visits the overview points and does whatever was asked
    # for at each of them. A Z reanalysis alone is enough, post-analysis experiments alone are
    # enough, and so is both. Only asking for neither is pointless: the stage would drive from
    # point to point without acquiring anything.
    if not setup['finding_objects'] and z_experiment is None and not setup['post_experiments']:
        problems.append(
            "With finding objects mode switched off there has to be either a Z reanalysis or at "
            "least one post-analysis experiment, otherwise this macro would only move the stage "
            "from point to point without acquiring anything.")

    if setup['multiple_overviews']:
        points_path = Path.Combine(CONFIG.measurements, "points_for_overview.json")

        if not File.Exists(points_path):
            problems.append(
                "Multiple overviews mode needs the file {}. Run find_overview_positions.czmac "
                "first, or switch the mode off.".format(points_path))

        else:
            try:
                overview_points = read_json_file(points_path)
            except Exception as error:
                overview_points = None
                problems.append("The overview points file {} could not be read: {}".format(points_path, error))

            # An empty list would send the macro straight through every loop below without
            # acquiring anything, and look like a run that simply finished very quickly
            if overview_points is not None and not overview_points:
                problems.append(
                    "The overview points file {} contains no points. Run find_overview_positions.czmac "
                    "again, or switch multiple overviews mode off.".format(points_path))

    # A preset without chosen_analysis makes the analysis side fall back to a name that is not
    # a registered algorithm, which only shows up once the overview has already been acquired
    for label, preset_name in (("overview analysis", setup['overview_analysis']),
                               ("XY reanalysis", setup['reanalysis_xy']),
                               ("Z analysis", setup['z_analysis'])):
        if preset_name is None:
            continue

        preset = processing_data.get(preset_name)

        if preset is None:
            problems.append(
                "The {} preset '{}' is not in processing_config.json.".format(label, preset_name))

        elif not preset.get('chosen_analysis'):
            problems.append(
                "The {} preset '{}' has no 'chosen_analysis' key, so the analysis side would not "
                "know which algorithm to run.".format(label, preset_name))

    # The object selection is optional and lives in its own config file, but a preset that is
    # named and then not found would only show up once the overview had been acquired
    selection_name = setup['overview_selection']

    if selection_name is not None:
        selection_preset = selection_data.get(selection_name)

        if selection_preset is None:
            problems.append(
                "The object selection preset '{}' is not in selection_config.json.".format(selection_name))

        elif not selection_preset.get('chosen_selection'):
            problems.append(
                "The object selection preset '{}' has no 'chosen_selection' key, so the analysis "
                "side would not know which algorithm to run.".format(selection_name))

    # A loaded setup can name an experiment that has since been renamed or deleted in ZEN, and
    # Zen.Acquisition.Experiments.GetByName then returns null, which only surfaces as
    # "Value cannot be null" once the run is already going. Names coming from the dropdowns are
    # always real, so this only ever catches a setup that was read back from a file.
    named_experiments = [("overview", setup['overview_experiment']),
                         ("object visualization", setup['visualization_experiment']),
                         ("Z", setup['z_experiment'])]

    named_experiments += [("post-analysis", name) for name in setup['post_experiments']]

    named_experiments += [("adaptive", experiment) for experiment in setup['adaptive_experiments']]

    for label, experiment_name in named_experiments:
        if experiment_name is not None and experiment_name not in experiments:
            problems.append(
                "The {} experiment '{}' is no longer among the experiments saved in ZEN.".format(
                    label, experiment_name))

    return problems


# Keys a saved setup has to carry. A file written by an older version of this macro would
# otherwise fail somewhere inside validate_setup, with a message about the wrong thing.
REQUIRED_SETUP_KEYS = ('finding_objects', 'multiple_overviews', 'overview_experiment',
                       'overview_analysis', 'overview_selection', 'visualization_experiment',
                       'reanalysis_xy', 'z_experiment', 'z_analysis', 'is_FCS',
                       'post_experiments', 'adaptive_pairs')


def load_setup(path):
    """
    Reads back the settings of the last run. Anything that makes the file unusable ends the macro
    right here, naming the file, instead of halfway through an acquisition.
    :param str path: full path to the saved setup
    :return: tuple (setup dict, error message from the adaptive experiment or None)
    """
    log("Loading the setup of the last run from {}".format(path))

    try:
        setup = read_json_file(path)
    except Exception as error:
        show_problems(["The saved setup {} could not be read: {}".format(path, error)])

    missing = [key for key in REQUIRED_SETUP_KEYS if key not in setup]

    if missing:
        show_problems(
            ["The saved setup {} is missing the keys: {}. It was most likely written by an older "
             "version of this macro. Run once without loading it and it will be written "
             "again.".format(path, ", ".join(missing))])

    # Functions cannot be written to a file, so the saved setup names the plugins instead and the
    # pairs are resolved again here, exactly as they are when they come from the dropdowns
    adaptive_experiments, adaptive_error = build_adaptive_experiments(setup['adaptive_pairs'])

    setup['adaptive_experiments'] = adaptive_experiments

    return setup, adaptive_error


def save_setup(path, setup):
    """
    Records the confirmed settings, so that the next run can start from them. The evaluated
    adaptive experiments are left out because they hold functions; 'adaptive_pairs', which names
    them, is saved in their place.
    :param str path: full path to write to
    :param dict setup: the confirmed selections
    :return: None
    """
    saveable = dict(setup)
    saveable.pop('adaptive_experiments', None)

    with open(path, "w") as file:
        json.dump(saveable, file, indent=2)


def show_problems(problems):
    """
    Shows what is wrong with the setup and ends the macro. Nothing has moved at this point,
    which is the whole reason these checks run before the pipeline is built.
    :param list problems: messages to show
    :return: None
    """
    log("Setup rejected: {}".format(problems))

    problems_window = ZenWindow()
    problems_window.Initialize("Cannot start")
    problems_window.AddMultiLineTextBox('problems_box', 'Fix these and run the macro again:',
                                        "\n\n".join(problems))
    problems_window.Show()

    raise SystemExit


################################## Code for generating GUI #######################################


processing_data = CONFIG.processing_config()
selection_data = CONFIG.selection_config()


def getshortfiles(filelist):
    """
    Gives the name of the files, without theirs extension.
    :param filelist: list of the file names
    :return: list of the same file names but without extension
    """
    files_short = []
    for short in filelist:
        files_short.append(Path.GetFileNameWithoutExtension(short))

    return files_short

# Finding the names of the user saved experiments .czexp
docfolder = Zen.Application.Environment.GetFolderPath(ZenSpecialFolder.UserDocuments)
expfiles = Directory.GetFiles(Path.Combine(docfolder, 'Experiment Setups'), '*.czexp')
experiments = getshortfiles(expfiles)

# Without any experiment the dropdowns below would have nothing to offer, and every
# GetValue on them would hand None to Zen.Acquisition.Experiments.GetByName
if not experiments:
    show_problems(["No .czexp experiments were found in the ZEN Experiment Setups folder, "
                   "so there is nothing for this macro to run."])

# === window 0: reusing the settings of the last run ===
# Offered only when there is something to load. Choosing it skips the windows below entirely:
# the summary is where a loaded setup is confirmed, and it is checked by validate_setup exactly
# like a setup that has just been clicked together.

load_last = False

if File.Exists(CONFIG.last_setup_path):
    window = ZenWindow()
    window.Initialize("Automated Acquisition")
    window.AddCheckbox('load_last_setup', 'Load the settings of the last run:', False)

    result_load = window.Show()

    if result_load.HasCanceled:
        raise SystemExit

    load_last = result_load.GetValue('load_last_setup')

if load_last:
    setup, adaptive_error = load_setup(CONFIG.last_setup_path)

else:
    # === window 1: choosing work modes ===
    window = ZenWindow()
    window.Initialize("Automated Acquisition")
    window.Title = "Automated Acquisition"

    window.AddCheckbox('finding_objects_mode', 'Finding objects mode:', True)
    window.AddCheckbox('multiple_overviews_mode', 'Multiple overviews mode:', True)

    result_mode = window.Show()

    if result_mode.HasCanceled:
        raise SystemExit

    finding_objects = result_mode.GetValue('finding_objects_mode')
    multiple_overviews = result_mode.GetValue('multiple_overviews_mode')

    # === window 2: choosing experiments and analysis, the analysis arguments are specified in the processing_config===
    window.ClearContent()
    window.Initialize("Automated Acquisition")

    if finding_objects:
        window.AddDropDown('over_exp_name', 'Choose overview experiment:', experiments, 0)
        window.AddDropDown('over_analysis', 'Choose overview analysis:', processing_data.keys(), 0)
        window.AddDropDown('over_selection', 'Choose object selection for the found objects:',
                           ["None"] + selection_data.keys(), 0)
        window.AddDropDown('vis_exp', 'Choose experiment for object visualization:', experiments, 0)
        window.AddDropDown('rean_xy_name', 'Choose reanalysis in xy:', ["None"] + processing_data.keys(), 0)

    window.AddDropDown('z_exp_name', 'Choose experiment for z-reanalysis:', ["None"] + experiments, 0)
    window.AddDropDown('z_analysis', 'Choose z-reanalysis:', ["None"] + processing_data.keys(), 0)
    window.AddCheckbox('is_FCS', 'Is z analysis experiment a FCS experiments:', True)

    window.AddCheckbox('use_adaptive', 'Use adaptive experiments:', False)

    result_setup = window.Show()

    if result_setup.HasCanceled:
        raise SystemExit

    # === window 3: choosing post-analysis experiments ===
    selected_experiments = []
    done = False

    while not done:
        window = ZenWindow()
        window.Initialize("Select post-analysis experiments")

        # "None" comes first and is the default, so that closing this window with Done and
        # without touching anything leaves the list empty. The object visualization
        # experiment is a measurement in its own right, and often the only one wanted.
        window.AddDropDown('post_exp_name', 'Choose post analysis experiment:', ["None"] + experiments, 0)
        chosen_text = "\n".join(selected_experiments) if selected_experiments else "None yet"
        window.AddMultiLineTextBox('chosen_post_exps', 'Currently selected:', chosen_text)
        window.AddDropDown('action', 'What next?', ['Add another', 'Done', 'Clear all'], 0)

        result_post = window.Show()

        # Cancelling ends the macro, the same as in the windows above. Continuing with a half
        # filled list would silently run something the user was in the middle of changing.
        if not result_post or result_post.HasCanceled:
            raise SystemExit

        action = result_post.GetValue('action')
        new_exp = result_post.GetValue('post_exp_name')

        if action == 'Add another':
            if new_exp != "None" and new_exp not in selected_experiments:
                selected_experiments.append(new_exp)
        elif action == 'Clear all':
            selected_experiments = []
        elif action == 'Done':
            # Done still takes whatever is selected, so that picking an experiment and
            # finishing takes one click instead of two. "None" is the exception.
            if new_exp != "None" and new_exp not in selected_experiments:
                selected_experiments.append(new_exp)
            done = True

    # === window 4: pairing adaptive functions with the experiments they rewrite ===
    # Shown only when asked for, so a run without adaptive experiments costs no extra clicks.
    # The experiments offered are the ones this run will actually execute: pairing a function
    # with an experiment that never runs does nothing and says nothing, and that silence has
    # already cost an afternoon once.

    adaptive_pairs = []
    adaptive_note = ""

    if result_setup.GetValue('use_adaptive'):
        run_experiments = []

        candidates = []

        if finding_objects:
            candidates.append(result_setup.GetValue('vis_exp'))

        candidates.append(none_or_value(result_setup.GetValue('z_exp_name')))
        candidates += selected_experiments

        for candidate in candidates:
            if candidate is not None and candidate not in run_experiments:
                run_experiments.append(candidate)

        if not run_experiments:
            log("Adaptive experiments were asked for, but this run executes no experiments")

        adaptive_done = not run_experiments

        while not adaptive_done:
            window = ZenWindow()
            window.Initialize("Adaptive experiments")

            window.AddDropDown('adaptive_function', 'Adaptive function:',
                               ["None"] + sorted(ADAPTIVE_FUNCTIONS.keys()), 0)
            window.AddDropDown('adaptive_target', 'Applies to experiment:',
                               ["None"] + run_experiments, 0)

            paired_text = "\n".join(["{} -> {}".format(pair[0], pair[1]) for pair in adaptive_pairs])
            window.AddMultiLineTextBox('chosen_pairs', 'Currently paired:',
                                       (paired_text or "None yet") + adaptive_note)

            window.AddDropDown('action', 'What next?', ['Add another', 'Done', 'Clear all'], 0)

            result_adaptive = window.Show()

            if not result_adaptive or result_adaptive.HasCanceled:
                raise SystemExit

            action = result_adaptive.GetValue('action')
            new_function = none_or_value(result_adaptive.GetValue('adaptive_function'))
            new_target = none_or_value(result_adaptive.GetValue('adaptive_target'))

            adaptive_note = ""

            if action == 'Clear all':
                adaptive_pairs = []

            else:
                # Done takes whatever is selected as well, so one pair costs one click. A half
                # filled pair is refused out loud rather than guessed at.
                if new_function is None and new_target is None:
                    pass

                elif new_function is None or new_target is None:
                    adaptive_note = "\n\nA pair needs both a function and an experiment."

                elif new_target in [pair[1] for pair in adaptive_pairs]:
                    adaptive_note = "\n\n{} is already paired. One function per experiment.".format(
                        new_target)

                else:
                    adaptive_pairs.append([new_function, new_target])

                if action == 'Done':
                    adaptive_done = True

    # === collecting the selections into one place and checking them ===
    # Everything below reads this dictionary and nothing calls GetValue again, so the summary
    # window cannot end up describing something other than what the pipeline is given.

    adaptive_experiments, adaptive_error = build_adaptive_experiments(adaptive_pairs)

    setup = {
        'finding_objects': finding_objects,
        'multiple_overviews': multiple_overviews,
        'overview_experiment': result_setup.GetValue('over_exp_name') if finding_objects else None,
        'overview_analysis': result_setup.GetValue('over_analysis') if finding_objects else None,
        'overview_selection': none_or_value(result_setup.GetValue('over_selection')) if finding_objects else None,
        'visualization_experiment': result_setup.GetValue('vis_exp') if finding_objects else None,
        'reanalysis_xy': none_or_value(result_setup.GetValue('rean_xy_name')) if finding_objects else None,
        'z_experiment': none_or_value(result_setup.GetValue('z_exp_name')),
        'z_analysis': none_or_value(result_setup.GetValue('z_analysis')),
        'is_FCS': result_setup.GetValue('is_FCS'),
        'adaptive_experiments': adaptive_experiments,
        'adaptive_pairs': adaptive_pairs,
        'post_experiments': selected_experiments,
    }

# A Z reanalysis needs both halves, so the decision is made once here and everything below
# reads it, instead of spelling the condition out again in each place that runs one.
setup['z_reanalysis'] = setup['z_experiment'] is not None and setup['z_analysis'] is not None

problems = validate_setup(setup)

if adaptive_error:
    problems.insert(0, adaptive_error)

if problems:
    show_problems(problems)

log("Setup accepted: {}".format(setup))

# === window 5: Summarry for user===
window = ZenWindow()
window.Initialize("Summary of selections")

summary_text = ""

if load_last:
    summary_text += "Loaded from {}\n\n".format(CONFIG.last_setup_path)

summary_text += "Finding objects mode: {}\n".format("Enabled" if setup['finding_objects'] else "Disabled")
summary_text += "Multiple overviews mode: {}\n".format("Enabled" if setup['multiple_overviews'] else "Disabled")

if setup['finding_objects']:
    summary_text += "\nOverview experiment: {}\n".format(setup['overview_experiment'])
    summary_text += "Overview analysis: {}\n".format(setup['overview_analysis'])
    summary_text += "Object selection: {}\n".format(setup['overview_selection'])
    summary_text += "Object visualization experiment: {}\n".format(setup['visualization_experiment'])
    summary_text += "Reanalysis XY: {}\n".format(setup['reanalysis_xy'])

summary_text += "\nZ experiment: {}\n".format(setup['z_experiment'])
summary_text += "Z analysis: {}\n".format(setup['z_analysis'])
summary_text += "Is z experiment a FCS?: {}\n".format(setup['is_FCS'])
if setup['adaptive_pairs']:
    summary_text += "Adaptive experiments:\n"

    for pair in setup['adaptive_pairs']:
        summary_text += "    {} rewriting {}\n".format(pair[0], pair[1])

else:
    summary_text += "Adaptive experiments: none\n"

if setup['post_experiments']:
    summary_text += "\nPost-analysis experiments:\n" + "\n".join(setup['post_experiments'])
else:
    summary_text += "\nNo post-analysis experiments selected."

window.AddMultiLineTextBox('summary_box', 'Summary:', summary_text)

result_summary = window.Show()

# This is the last point at which the run can still be called off
if not result_summary or result_summary.HasCanceled:
    raise SystemExit

# What was confirmed becomes the starting point of the next run. Recording it must never cost
# an acquisition, so a failure to write is logged and the run starts anyway.
try:
    save_setup(CONFIG.last_setup_path, setup)
    log("Saved the setup to {}".format(CONFIG.last_setup_path))

except Exception as error:
    log("Could not save the setup to {}: {}".format(CONFIG.last_setup_path, error))


################################## Actual Macro: initializing the AcquisitionPipeline with arguments from the GUI #######################################

# Points that raised on the way. One bad well must not cost the rest of the plate, so the
# failure is logged and the run carries on, and the names are repeated at the end.
failed_points = []

if setup['finding_objects']:

    pipeline = AcquisitionPipeline(CONFIG,
                                   object_visualization_experiment=setup['visualization_experiment'],
                                   reanalysis_dict={'xy': setup['reanalysis_xy'],
                                                    'z': {'z_experiment': setup['z_experiment'],
                                                          'z_analysis': setup['z_analysis'],
                                                          'is_FCS': setup['is_FCS']}},
                                   post_reanalysis_experiments=setup['post_experiments'],
                                   adaptive_experiments=setup['adaptive_experiments']
                                   )

    if setup['multiple_overviews']:
        for point in pipeline.points_for_overview:
            try:
                ZeissApiProcessor.move(point['position'])

                pipeline.acquire_overview(overview_experiment=setup['overview_experiment'],
                                          analysis_args=setup['overview_analysis'],
                                          selection_args=setup['overview_selection'], name=point['name'])
                pipeline.capture_objects(name=point['name'])

            except Exception as error:
                failed_points.append(point['name'])
                log("Point {} failed and was skipped: {}".format(point['name'], error))

    else:
        pipeline.acquire_overview(overview_experiment=setup['overview_experiment'],
                                  analysis_args=setup['overview_analysis'],
                                  selection_args=setup['overview_selection'], name=None)
        pipeline.capture_objects(name=None)

else:
    pipeline = AcquisitionPipeline(CONFIG,
        reanalysis_dict={'z': {'z_experiment': setup['z_experiment'],
                               'z_analysis': setup['z_analysis'],
                               'is_FCS': setup['is_FCS']}},
        adaptive_experiments=setup['adaptive_experiments'],
    )
    if setup['multiple_overviews']:

        for point in pipeline.points_for_overview:

            try:
                ZeissApiProcessor.move(point['position'])

                # The Z reanalysis is optional here: visiting the overview points and running the
                # post-analysis experiments on each of them is a valid run on its own
                if setup['z_reanalysis']:
                    pipeline._perform_reanalysis_z(obj_id=pipeline.overview_id, name=point['name'])

                for experiment in setup['post_experiments']:
                    pipeline._run_experiment(obj_id=pipeline.overview_id, exp_item=experiment, stage='_post',
                                             name=point['name'], obj=None)

            except Exception as error:
                failed_points.append(point['name'])
                log("Point {} failed and was skipped: {}".format(point['name'], error))

            Zen.Application.Documents.RemoveAll()

    else:

        if setup['z_reanalysis']:
            pipeline._perform_reanalysis_z(obj_id=pipeline.overview_id)

        for experiment in setup['post_experiments']:
            pipeline._run_experiment(obj_id=pipeline.overview_id, exp_item=experiment, stage='_post')

        Zen.Application.Documents.RemoveAll()  #


if failed_points:
    log("Run finished, {} point(s) were skipped after an error: {}".format(
        len(failed_points), ", ".join(failed_points)))
else:
    log("Run finished without skipped points")

</Text>
  <Author></Author>
  <Description></Description>
  <Keywords></Keywords>
  <Row>80</Row>
  <Column>12</Column>
</Script>
